PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = emotional_valence_experiment
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent stim
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      correctAns = $'j' if valence=='positive' else 'f'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will see images on the screen.

        Press:
        F = Negative
        J = Positive

        Try to respond as fast and correctly as possible.

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 3
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    conditions:
      [{'image': 'images/positive/School 2.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Siblings 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Skier 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Skydiving 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Smiling face 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Soccer 2.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Soup 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Statue 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Statue 2.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Sunflower 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Sunset 4.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Sunset 6.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Surprise 2.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Toast 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Volcano 3.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Wedding 4.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Wedding 8.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Wedding ring 1.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Yoga 3.jpg', 'valence': 'positive'},
      {'image': 'images/positive/Zebra 1.jpg', 'valence': 'positive'},
      {'image': 'images/negative/Plane crash 1.jpg', 'valence': 'negative'},
      {'image': 'images/negative/Plane crash 4.jpg', 'valence': 'negative'}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
    Routine trial
  LoopTerminator trials
  Routine thank_you
